acquisition:
  metadata:
    subject_id: 123456
    experimenter_name: adam glaser
    immersion_medium: 0.05X SSC
    immersion_medium_refractive_index: 1.33
    x_anatomical_direction: Anterior_to_posterior
    y_anatomical_direction: Inferior_to_superior
    z_anatomical_direction: Left_to_right
  operations:
    vp-151mx:
      bdv:
        type: writer
        driver: voxel.writers.bdv
        module: Writer
        init:
          path: ./local_test
        settings:
          compression: none
          data_type: uint16
      imaris:
        type: writer
        driver: voxel.writers.imaris
        module: Writer
        init:
          path: ./local_test_1
        settings:
          compression: none
          data_type: uint16
      rsync:
        type: transfer
        driver: voxel.transfers.rsync
        module: FileTransfer
        init:
          external_directory: ./external_test
          local_directory: ./local_test
      max_projection:
        type: process
        driver: voxel.processes.cpu.max_projection
        module: MaxProjection
        init:
          path: ./local_test
        settings:
          data_type: uint16
          projection_count_px: 32
      mean_projection:
        type: process
        driver: voxel.processes.cpu.mean_projection
        module: MeanProjection
        init:
          path: ./local_test
        settings:
          data_type: uint16
          projection_count_px: 32
      background_collection:
        type: routine
        driver: voxel.routines.background_collection
        module: BackgroundCollection
        init:
          path: ./local_test
        settings:
          data_type: uint16
          frame_count_px: 10
    vnp-604mx:
        bvd:
          type: writer
          driver: voxel.writers.bdv
          module: Writer
          init:
            path: ./local_test
          settings:
            compression: none
            data_type: uint16
        rsync:
          type: transfer
          driver: voxel.transfers.rsync
          module: FileTransfer
          init:
            external_directory: ./external_test
            local_directory: ./local_test
        max_projection:
          type: process
          driver: voxel.processes.cpu.max_projection
          module: MaxProjection
          init:
            path: ./local_test
          settings:
            data_type: uint16
            projection_count_px: 32
        mean_projection:
          type: process
          driver: voxel.processes.cpu.mean_projection
          module: MeanProjection
          init:
            path: ./local_test
          settings:
            data_type: uint16
            projection_count_px: 32
        background_collection:
          type: routine
          driver: voxel.routines.background_collection
          module: BackgroundCollection
          init:
            path: ./local_test
          settings:
            data_type: uint16
            frame_count_px: 10
  tiles:
    - tile_number:
        x: 0
        y: 0
        z: 0
        w: 0
      position_mm:
        x: 0
        y: 0
        z: 0
        w: 1
      prefix: tile
      frame_count_px: 128
      vp-151mx:
        type: camera
        settings:
          binning: 1
      488 mw:
        type: laser
        settings:
          power_mw: 100
      w axis:
        type: rotation stage
        settings:
          position_mm: .4
        dynamic_setting?:
          position_mm: [.4, .5, .6]
          iterate: 60
      nidaq:
        type: daq
        autofocus?:
          module: whatever
      channel: "488"

    - tile_number:
        x: 1
        y: 0
        z: 0
        w: 0
      position_mm:
        x: 1
        y: 1
        z: 1
        w: 1
      voxel_size_um:
        x: 0.748
        y: 0.748
        z: 1.000
      prefix: tile
      frame_count_px: 256
      binning: 1
      channel: "488"
      power_mw: 1000