acquisition:
  metadata:
    driver: voxel.metadata.metadata_class
    module: MetadataClass
    init:
      metadata_dictionary:
        instrument_type: simulated
        subject_id: 123456
        experimenter_name: adam glaser
        immersion_medium: 0.05X SSC
        immersion_medium_refractive_index: 1.33
        x_anatomical_direction: Anterior_to_posterior
        y_anatomical_direction: Inferior_to_superior
        z_anatomical_direction: Left_to_right
      date_format: year/month/day/hour/minute/second
      name_specs:
        deliminator: _
        format: [ instrument_type, subject_id ]
  operations:
    vp-151mx:
      bdv:
        type: writer
        driver: voxel.writers.bdv
        module: Writer
        init:
          path: ./local_test
        settings:
          compression: none
          data_type: uint16
      imaris:
        type: writer
        driver: voxel.writers.imaris
        module: Writer
        init:
          path: ./local_test_1
        settings:
          compression: none
          data_type: uint16
      rsync:
        type: transfer
        driver: voxel.transfers.rsync
        module: FileTransfer
        init:
          external_directory: ./external_test
          local_directory: ./local_test
      max_projection:
        type: process
        driver: voxel.processes.cpu.max_projection
        module: MaxProjection
        init:
          path: ./local_test
        settings:
          data_type: uint16
          projection_count_px: 32
      mean_projection:
        type: process
        driver: voxel.processes.cpu.mean_projection
        module: MeanProjection
        init:
          path: ./local_test
        settings:
          data_type: uint16
          projection_count_px: 32
      background_collection:
        type: routine
        driver: voxel.routines.background_collection
        module: BackgroundCollection
        init:
          path: ./local_test
        settings:
          data_type: uint16
          frame_count_px: 10
    vnp-604mx:
        bvd:
          type: writer
          driver: voxel.writers.bdv
          module: Writer
          init:
            path: ./local_test
          settings:
            compression: none
            data_type: uint16
        rsync:
          type: transfer
          driver: voxel.transfers.rsync
          module: FileTransfer
          init:
            external_directory: ./external_test
            local_directory: ./local_test
        max_projection:
          type: process
          driver: voxel.processes.cpu.max_projection
          module: MaxProjection
          init:
            path: ./local_test
          settings:
            data_type: uint16
            projection_count_px: 32
        mean_projection:
          type: process
          driver: voxel.processes.cpu.mean_projection
          module: MeanProjection
          init:
            path: ./local_test
          settings:
            data_type: uint16
            projection_count_px: 32
        background_collection:
          type: routine
          driver: voxel.routines.background_collection
          module: BackgroundCollection
          init:
            path: ./local_test
          settings:
            data_type: uint16
            frame_count_px: 10
  tiles: []